//// Microglia Morphology ImageJ macro
//// Created by Jenn Kim on September 18, 2022
//// Updated September 20, 2022
//// April 3, 2023

// FUNCTIONS

// Auto thresholding 
function thresholding(input, output, filename) {
		print(input + filename);
		open(input + filename);
	
		// THRESHOLD IMAGE AND CLEAN UP FOR DOWNSTREAM PROCESSING IN ANALYZESKELETON
		run("8-bit");
		// convert to grayscale to best visualize all positive staining
		run("Sharpen");
		run("Enhance Contrast...", "saturated=0.60");
		run("Subtract Background...", "rolling=10");
		run("Gamma...", "value=.6");
		run("Auto Threshold", "method=&auto_method ignore_black white");
		if (roichoice){
			// exclude anything not within roi
			setBackgroundColor(0, 0, 0); 
			run("Clear Outside"); 
		}
		run("Morphological Filters", "operation=Dilation element=Disk radius=1");
		run("Close-");
		
		// save thresholded + cleaned image -- this is the input for skeleton analysis below
		saveAs("Tiff", output + filename + "_thresholded");
		close();
	}
	
// Auto local thresholding 
function thresholding2(input, output, filename) {
		print(input + filename);
		open(input + filename);
	
		// THRESHOLD IMAGE AND CLEAN UP FOR DOWNSTREAM PROCESSING IN ANALYZESKELETON
		run("8-bit");
		// convert to grayscale to best visualize all positive staining
		run("Grays");
		// adjust the brighness and contrast to make sure you can visualize all microglia processes
		// in ImageJ, B&C are changed by updating the image's lookup table, so pixel values are unchanged
		run("Brightness/Contrast...");
		run("Enhance Contrast", "saturated=0.35");
		// run Unsharp Mask filter to further increase contrast of image using default settings
		// this mask does not create details, but rather clarifies existing detail in image
		run("Unsharp Mask...", "radius=3 mask=0.60");
		// use despeckle function to remove salt&pepper noise generated by unsharp mask filter
		run("Despeckle");		
		run("Auto Local Threshold", "method=&autolocal_method radius=&autolocal_radius parameter_1=0 parameter_2=0 white");
		if (roichoice){
			// exclude anything not within roi
			setBackgroundColor(0, 0, 0); 
			run("Clear Outside"); 
		}
		// use despeckle function to remove remaining single-pixel noise generated by thresholding
		run("Despeckle");
		// apply close function to connect any disconnected cell processes back to the rest of the cell
		// this function connects two dark pixels if they are separated by up to 2 pixels
		run("Close-");
		// after closing up cells, remove any outliers
		// replaces a bright or dark outlier pixel by the median pixels in the surrounding area if it deviates by more than the threshold value specified
		// here, bright outliers are targeted with pixel radius 2 and threshold of 50
		run("Remove Outliers...", "radius=2 threshold=50 which=Bright");
		// save thresholded + cleaned image -- this is the input for skeleton analysis below
		saveAs("Tiff", output + filename + "_thresholded");
		
		close();
	}

//Generating Single Cell ROIs from thresholded images
function cellROI(input, output, filename){
		print(input + filename);
    	open(input + filename);
    	
    	mainTitle=getTitle();
		dirCropOutput=output;
		
	    run("ROI Manager...");
	    roiManager("Show All");
		roiManager("Deselect");
		run("Set Measurements...", "area display redirect=None decimal=3");

		run("Analyze Particles...", "pixel add");
		roiManager("Show All");
		roiManager("Measure");	
				
		for (i = 0; i < nResults(); i++) {
		//for (i = 0; i < 5; i++) {
			selectWindow("Results");
		
				label = getResultString("Label", i);
				label = label.replace(':','_');
				roiManager("Select", i);
				run("Duplicate...", "title=&label");
				setBackgroundColor(0, 0, 0);
				run("Clear Outside");
				saveAs("Tiff", dirCropOutput+File.separator+label+".tif");
				print(label);
				selectWindow(label+".tif");
				run("Close");				
			}
		
		selectWindow(mainTitle);
		run("Close");
		selectWindow("Results");
	   	run("Close");
	    selectWindow("ROI Manager");
	    run("Close");
    }
    


// Skeletonize/AnalyzeSkeleton
function skeleton(input, output, output2, filename) {
        print(input + filename);
        open(input + filename);

	      // SKELETON ANALYSIS !!
	      // Skeletonize your thresholded image
	      // this process basically systematically cuts down your thresholded processes from all sides into one single trace
	      run("Skeletonize (2D/3D)");
	      // run the AnalyzeSkeleton(2D/3D) plugin 
	      // this plugin will take your skeletonized cells and tag them with useful information (junctions, length, triple/quadruple points, etc.)
	      run("Analyze Skeleton (2D/3D)", "prune=none");
	      // summarize output across all cells and append to end of output data file
	      run("Summarize");
	      // save results
	      saveAs("Results", output + filename + "_results.csv");
	      // save tagged skeleton 
	      saveAs("Tiff", output2 + filename + "_taggedskeleton");
	      //close open windows
	      close();
	      close();
    }

// choices in drop-down prompts for MicrogliaMorphology macro
thresholding_approach = newArray("Auto thresholding", "Auto local thresholding");
thresholding_parameters = newArray("Huang","Huang2","Intermodes","IsoData","Li","MaxEntropy","Mean","MinError(I)","Minimum","Moments","Otsu","Percentile","RenyiEntropy","Shanbhag","Triangle","Yen")
thresholding_parameters2 = newArray("Bernsen","Contrast","Mean","Median","MidGrey","Niblack","Otsu","Phansalkar","Sauvola");



// MACRO STARTS HERE

//Welcome message
		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("Welcome to Microglia Morphology!");
		Dialog.addMessage("We will first specify some dataset-specific parameters before running MicrogliaMorphology.");
		Dialog.addMessage("Please make sure to use the BioVoxxel ImageJ plugin to determine your thresholding parameters prior to this step.");
		Dialog.addMessage("If you have not done this yet, please do so first and come back to MicrogliaMorphology. If you have, continue on :");
		Dialog.show();

// STEP 1a. Specifying final dataset-specific parameters: thresholding
			
		//dialog box
		Dialog.create("MicrogliaMorphology");
		Dialog.addChoice("Are you using auto thresholding or auto local thresholding?", thresholding_approach);
		Dialog.addMessage("If you are using auto thresholding:");
		Dialog.addChoice("Which method is best for your dataset?", thresholding_parameters);
		Dialog.addMessage("If you are using auto local thresholding:");
		Dialog.addChoice("Which method is best for your dataset?", thresholding_parameters2);
		Dialog.addNumber("Radius:", 100);
		Dialog.addCheckbox("Does your test image have ROIs traced?", true);
		Dialog.addMessage("Next, let's determine the area range of a single microglial cell using a test image.");
		Dialog.show();	
		
		auto_or_autolocal = Dialog.getChoice();
		auto_method = Dialog.getChoice();
		autolocal_method= Dialog.getChoice();
		autolocal_radius = Dialog.getNumber();
		roichoicetest=Dialog.getCheckbox();



		
// STEP 2. Thresholding

//use file browser to choose path and files to run plugin on
		setOption("JFileChooser",true);
		subregion_dir=getDirectory("Choose parent folder containing subregion ROIs");
		subregion_input=getFileList(subregion_dir);
		autocount=subregion_input.length;
			
		//use file browser to choose path and files to run plugin on
		setOption("JFileChooser",true);
		output=getDirectory("Choose output folder to write to");
				
		//dialog box
		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("Processing files from directory:");
		parentname=split(subregion_dir,"/");
		Dialog.addMessage(parentname[(parentname.length)-1]);
		Dialog.addMessage("which has this many images:");
		Dialog.addMessage(autocount);
		Dialog.addMessage("Select range of images you'd like to analyze");
		Dialog.addNumber("Start at Image:", 1);
		Dialog.addNumber("Stop at Image:", 1);
		Dialog.addCheckbox("Do your input images have ROIs traced?", true);
		Dialog.show();
				
		startAt=Dialog.getNumber();
		endAt=Dialog.getNumber();
		roichoice=Dialog.getCheckbox();
		
		if(auto_or_autolocal == "Auto thresholding"){
			setBatchMode("show");
			for (i=(startAt-1); i<(endAt); i++){
				thresholding(subregion_dir, output, subregion_input[i]);
				}
		}
		
		if(auto_or_autolocal == "Auto local thresholding"){
			setBatchMode("show");
			for (i=(startAt-1); i<(endAt); i++){
				thresholding2(subregion_dir, output, subregion_input[i]);
				}
		}
		
		print("Thresholding finished");

// Progress message
		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("Now that we are done thresholding,");
		Dialog.addMessage("we will generate single-cell ROIs");
		Dialog.show();

		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("Now that we are done generating single-cell ROIs,");
		Dialog.addMessage("we will analyze their skeletons");
		Dialog.show();

// STEP 3. Skeletonize/AnalyzeSkeleton
        
        //use file browser to choose path and files to run plugin on
		setOption("JFileChooser",true);
		cell_dir=getDirectory("Choose parent folder containing single-cell ROIs");
		cell_input=getFileList(cell_dir);
		cell_count=cell_input.length;
	
		//use file browser to choose path and files to run plugin on
		setOption("JFileChooser",true);
		skeleton_output=getDirectory("Choose output folder to write results to");
		
		//use file browser to choose path and files to run plugin on
		setOption("JFileChooser",true);
		skeleton2_output=getDirectory("Choose output folder to write skeletonized images to");
		
		//dialog box
		Dialog.create("MicrogliaMorphology");
		Dialog.addMessage("Processing files from directory:");
		parentname=split(cell_dir,"/");
		Dialog.addMessage(parentname[(parentname.length)-1]);
		Dialog.addMessage("which has this many images:");
		Dialog.addMessage(cell_count);
		Dialog.addMessage("Select range of cell images you'd like to analyze");
		Dialog.addNumber("Start at Image:", 1);
		Dialog.addNumber("Stop at Image:", 1);
		Dialog.show();
		
		startAt=Dialog.getNumber();
		endAt=Dialog.getNumber();
       
    	setBatchMode("show");
		for (i=(startAt-1); i<(endAt); i++){
				skeleton(cell_dir, skeleton_output, skeleton2_output, cell_input[i]);
		}
		
		print("Finished Analyzing Skeletons");
	    print("done!");
